<?xml version='1.0'?>
<model cmeta:id="SGLT1_model" name="SGLT1_model" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:xlink="http://www.w3.org/1999/xlink">
    <import xlink:href="../general/Units_for_EpithelialCell.cellml">
        <units name="millivolt" units_ref="millivolt"/>
        <units name="per_second" units_ref="per_second"/>
        <units name="coulomb_per_mole" units_ref="coulomb_per_mole"/>
        <units name="joule_per_millimole" units_ref="joule_per_millimole"/>
        <units name="molar" units_ref="molar"/>
        <units name="millimole2_per_joulesecond" units_ref="millimole2_per_joulesecond"/>
        <units name="millimole_per_second" units_ref="millimole_per_second"/>
    </import>
    <import xlink:href="../general/Generator.cellml">
        <component component_ref="experiment" name="experiment"/>
    </import>
    <connection>
        <map_components component_1="experiment" component_2="Weinstein_SGLT"/>
        <map_variables variable_1="time" variable_2="time"/>
        <map_variables variable_1="Na_I" variable_2="Na_I"/>
        <map_variables variable_1="Gluc_I" variable_2="Gluc_I"/>
        <map_variables variable_1="Vm" variable_2="Vm"/>
        <map_variables variable_1="Vi" variable_2="Vi"/>
    </connection>
    <component cmeta:id="Weinstein_SGLT" name="Weinstein_SGLT">
        <variable name="time" private_interface="out" public_interface="in" units="second"/>
        <variable name="Na_I" private_interface="in" public_interface="out" units="molar"/>
        <variable name="Gluc_I" private_interface="in" public_interface="out" units="molar"/>
        <variable name="Vm" private_interface="in" public_interface="out" units="millivolt"/>
        <variable name="Vi" private_interface="in" public_interface="out" units="millivolt"/>
        <variable name="Na_SGLT_Flux" private_interface="out" public_interface="out" units="millimole_per_second"/>
        <variable name="Gluc_SGLT_Flux" private_interface="out" public_interface="out" units="millimole_per_second"/>
        <variable name="F" private_interface="none" public_interface="in" units="coulomb_per_mole"/>
        <variable name="Na_M" private_interface="out" public_interface="in" units="molar"/>
        <variable name="Gluc_M" private_interface="out" public_interface="in" units="molar"/>
        <variable name="zna" private_interface="none" public_interface="in" units="dimensionless"/>
        <variable name="zgluc" private_interface="none" public_interface="in" units="dimensionless"/>
        <variable name="L_SGLT" private_interface="none" public_interface="in" units="millimole2_per_joulesecond"/>
        <variable name="Ami" private_interface="out" public_interface="in" units="dimensionless"/>
        <variable name="rte" private_interface="none" public_interface="in" units="joule_per_millimole"/>
        <variable initial_value="0.0" name="m" public_interface="out" units="second"/>
        <variable name="mu_Na_M" private_interface="out" public_interface="out" units="joule_per_millimole"/>
        <variable name="mu_Gluc_M" private_interface="out" public_interface="out" units="joule_per_millimole"/>
        <variable name="mu_Na_I" private_interface="out" public_interface="out" units="joule_per_millimole"/>
        <variable name="mu_Gluc_I" private_interface="out" public_interface="out" units="joule_per_millimole"/>
        <variable name="delta_mu_Na" private_interface="out" public_interface="out" units="joule_per_millimole"/>
        <variable name="delta_mu_Gluc" private_interface="out" public_interface="out" units="joule_per_millimole"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>mu_Na_M</ci>
                <apply>
                    <plus/>
                    <apply>
                        <times/>
                        <ci>rte</ci>
                        <apply>
                            <ln/>
                            <ci>Na_M</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>zna</ci>
                        <ci>F</ci>
                        <ci>Vm</ci>
                        <apply>
                            <power/>
                            <cn cellml:units="dimensionless">10.0</cn>
                            <apply>
                                <minus/>
                                <cn cellml:units="dimensionless">6</cn>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>mu_Na_I</ci>
                <apply>
                    <plus/>
                    <apply>
                        <times/>
                        <ci>rte</ci>
                        <apply>
                            <ln/>
                            <ci>Na_I</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>zna</ci>
                        <ci>F</ci>
                        <ci>Vi</ci>
                        <apply>
                            <power/>
                            <cn cellml:units="dimensionless">10.0</cn>
                            <apply>
                                <minus/>
                                <cn cellml:units="dimensionless">6</cn>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>mu_Gluc_M</ci>
                <apply>
                    <plus/>
                    <apply>
                        <times/>
                        <ci>rte</ci>
                        <apply>
                            <ln/>
                            <ci>Gluc_M</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>zgluc</ci>
                        <ci>F</ci>
                        <ci>Vm</ci>
                        <apply>
                            <power/>
                            <cn cellml:units="dimensionless">10.0</cn>
                            <apply>
                                <minus/>
                                <cn cellml:units="dimensionless">6</cn>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>mu_Gluc_I</ci>
                <apply>
                    <plus/>
                    <apply>
                        <times/>
                        <ci>rte</ci>
                        <apply>
                            <ln/>
                            <ci>Gluc_I</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>zgluc</ci>
                        <ci>F</ci>
                        <ci>Vi</ci>
                        <apply>
                            <power/>
                            <cn cellml:units="dimensionless">10.0</cn>
                            <apply>
                                <minus/>
                                <cn cellml:units="dimensionless">6</cn>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>delta_mu_Na</ci>
                <apply>
                    <minus/>
                    <ci>mu_Na_M</ci>
                    <ci>mu_Na_I</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>delta_mu_Gluc</ci>
                <apply>
                    <minus/>
                    <ci>mu_Gluc_M</ci>
                    <ci>mu_Gluc_I</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>Na_SGLT_Flux</ci>
                <apply>
                    <times/>
                    <ci>L_SGLT</ci>
                    <ci>Ami</ci>
                    <apply>
                        <plus/>
                        <ci>delta_mu_Na</ci>
                        <ci>delta_mu_Gluc</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>Gluc_SGLT_Flux</ci>
                <apply>
                    <times/>
                    <ci>L_SGLT</ci>
                    <ci>Ami</ci>
                    <apply>
                        <plus/>
                        <ci>delta_mu_Na</ci>
                        <ci>delta_mu_Gluc</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>m</ci>
                </apply>
                <cn cellml:units="dimensionless">1</cn>
            </apply>
        </math>
    </component>
    <group>
        <relationship_ref relationship="encapsulation"/>
        <component_ref component="Weinstein_SGLT">
            <component_ref component="experiment"/>
        </component_ref>
    </group>
</model>
